<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:AindDynamicForagingDataSchema;assembly=Extensions"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="TaskLogicPath" />
        <Property Name="RigPath" />
        <Property Name="SessionPath" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:ReadSchemas.bonsai">
        <TaskLogicPath>C:\git\AllenNeuralDynamics\aind-vr-foraging\local\AindDynamicForagingTaskLogic.json</TaskLogicPath>
        <RigPath>C:\git\AllenNeuralDynamics\aind-vr-foraging\local\AindDynamicForagingRig.json</RigPath>
        <SessionPath>C:\git\AllenNeuralDynamics\aind-vr-foraging\local\AindBehaviorSessionModel.json</SessionPath>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>LoadSchemas</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>RawSessionSchema</Name>
            </Expression>
            <Expression xsi:type="p1:DeserializeFromJson">
              <p1:Type xsi:type="TypeMapping" TypeArguments="p1:AindBehaviorSessionModel" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>SubjectSchema</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RawRigSchema</Name>
            </Expression>
            <Expression xsi:type="p1:DeserializeFromJson">
              <p1:Type xsi:type="TypeMapping" TypeArguments="p1:AindDynamicForagingRig" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RawTaskLogicSchema</Name>
            </Expression>
            <Expression xsi:type="p1:DeserializeFromJson">
              <p1:Type xsi:type="TypeMapping" TypeArguments="p1:AindDynamicForagingTaskLogic" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>TaskLogicSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>TaskParameters</Selector>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>TaskLogicParameters</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name />
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Hardware</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="GroupWorkflow">
              <Name>HarpDevices</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RigSchema</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>HarpClockGenerator.PortName</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="PortName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.HarpUtils:HarpWhiteRabbit.bonsai">
                    <PortName>COMx</PortName>
                    <TriggerHarpReadDumpSubjectName>TriggerHarpReadDump</TriggerHarpReadDumpSubjectName>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges />
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>init</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Unit" />
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>TriggerHarpReadDump</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>